PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = change-your-mind
  keyboardBackend = ioHub
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Routines
  Routine trial
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    TextboxComponent fixation_one
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = 1
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    TextboxComponent stimulus_target
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.15
      text = XXXLXXXX
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    TextboxComponent fixation_two
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [condition] = $resp_one is not None
      stopVal [duration (s)] = 0.5
      text = 2
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    TextboxComponent stimulus_masked
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.65
      stopVal [duration (s)] = 1.85
      text = XXXXXXXX
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    KeyboardComponent resp_one
      allowedKeys = 'f', 'j'
      forceEndRoutine = False
      startVal [time (s)] = 2.5
      stopVal [condition] = $resp_one is not None
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Flow
  Routine trial
